# Headless passive monitor for the live Battery Dynamics HRT tester.
#
# Run from qudi-core with:
#   venv\Scripts\python.exe -m qudi.core --no-gui --config qudi-iqo-modules\config_examples\battery_tester_headless_monitoring.cfg
#
# The monitoring file is finalized when Qudi shuts down normally.

global:
    startup_modules:
        - battery_tester_logic

hardware:
    hrt_battery_tester:
        module.Class: 'battery_tester.hrt_battery_tester.HrtBatteryTester'
        options:
            base_url: 'http://10.1.24.116:1841/'
            api_url: 'http://10.1.24.116:8000/'
            live_transport: 'socketio'
            socketio_url: 'http://10.1.24.116:3000/'
            socketio_path: 'socket.io'
            max_live_age_s: 5
            # Browser settings are retained for an explicit Playwright fallback only.
            browser_channel: 'chrome'
            headless: true
            request_timeout_s: 10
            navigation_timeout_s: 30
            command_timeout_s: 10
            allowed_channels: [13, 14, 15, 16]
            require_live_data: true
            reconnect_attempts: 2
            reconnect_backoff_s: 0.5
            reconnect_cooldown_s: 10
            capture_diagnostics_on_error: true
            max_diagnostic_sets: 10

logic:
    battery_tester_logic:
        module.Class: 'battery_tester_logic.BatteryTesterLogic'
        options:
            poll_interval_s: 1.0
            require_temperature_sensor: true
            auto_start_monitoring: true
            monitor_channel_ids: [13, 14, 15, 16]
            monitor_flush_rows: 20
            monitor_flush_interval_s: 5
            monitor_max_buffer_rows: 10000
            monitor_save_thumbnail: true
        connect:
            battery_tester: hrt_battery_tester
